PsychoPy2experiment version="2024.1.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = ER_paradigm
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine WelcomeScreen
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    TextComponent WelcomeText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Willkommen!

        In diesem Training sollen Sie drei Emotionsregulations-Strategien kennen lernen und diese erproben. Außerdem sollen Sie die verschiedenen Fragen am Ende jedes Blockes kennen lernen.

        Während des Experimentes werden noch keine Messungen vorgenommen.

        Zum Fortfahren Leertaste drücken.
    KeyboardComponent WelcomeResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine fixcross
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    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine Slider_Arousal
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    TextComponent text_slider_arousal
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Wie hoch schätzen Sie Ihre durchschnittliche emotionale Aufregung beim Betrachten der Bilder ein?
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    SliderComponent slider_arousal
      borderColor = black
      color = black
      fillColor = black
      forceEndRoutine = True
      granularity = 0
      labels = ("sehr gering", "sehr hoch")
      letterHeight = 0.05
      pos = (0, -0.2)
      size = [1.0,0.1]
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0,400)
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  Routine Slider_Effort
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    TextComponent text_slider_effort
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Wie hoch schätzen Sie Ihre geistige Anstrengung während des Anwendens der Strategie ein?
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    SliderComponent slider_effort
      borderColor = black
      color = black
      fillColor = black
      forceEndRoutine = True
      granularity = 0
      labels = ("sehr gering","sehr hoch")
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0,0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0,400)
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  Routine Instruction
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    TextComponent text_instruction
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_1 + '\n\n' + 'In diesem Block werden Sie eine Reihe von Bildern sehen. Diese sollen Sie aufmerksam ansehen.' + '\n' + instr_2 + '\n\n' + instr_3 + '\n\n' + 'Zum Starten des Blocks Leertaste drücken'
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    KeyboardComponent instr_view_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine Pics
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    ImageComponent image_view
      image [set every repeat] = $ImageFile
      size = (1, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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  Routine EndScreen
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    TextComponent text_end
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Das Training ist nun beendet.

        Bitte wenden Sie sich an die Versuchsleitung!

        Zum Beenden bitte Leertaste drücken.
    KeyboardComponent resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  Routine WelcomeScreen
  LoopInitiator blocks_training loopType="TrialHandler"
    conditionsFile = blocks_training.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'conds_view_File': 'Stimuli_view.xlsx', 'Trigger': 1, 'nReps': 3},
      {'conds_view_File': 'Stimuli_distract.xlsx', 'Trigger': 2, 'nReps': 3},
      {'conds_view_File': 'Stimuli_distance.xlsx', 'Trigger': 3, 'nReps': 3},
      {'conds_view_File': 'Stimuli_suppress.xlsx', 'Trigger': 4, 'nReps': 3}]
    Routine Instruction
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $conds_File
      loopType = random
      nReps = 1
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      Routine fixcross
      Routine Pics
    LoopTerminator trials
    Routine Slider_Arousal
    Routine Slider_Effort
  LoopTerminator blocks_training
  Routine EndScreen
